Key	Value
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
    Range of the granular spectrum:30

MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
    Range of the granular spectrum:30

MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
    Range of the granular spectrum:30

MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
    Range of the granular spectrum:30

MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Run_Timestamp	2021-04-12T12:29:59.987623
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
    Range of the granular spectrum:30

MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
    Range of the granular spectrum:30

MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
    Range of the granular spectrum:30

MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
    Range of the granular spectrum:30

MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Run_Timestamp	2021-04-12T12:29:59.875243
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Run_Timestamp	2021-04-12T12:29:58.298267
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>.*) - (?P<Col>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2})\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\\AGKonstandin\\Alex\\CP\\
    Cluster root path:C:\Users\Incell/hits/fast/ain/CompuCard/
"
Run_Timestamp	2021-04-12T12:29:59.712270
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Run_Timestamp	2021-04-12T12:29:59.708804
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Run_Timestamp	2021-04-12T12:29:59.986715
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Run_Timestamp	2021-04-12T12:29:59.875243
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Run_Timestamp	2021-04-12T12:29:59.624987
CellProfiler_Version	4.1.3
ChannelType_CalceinAM	Grayscale
Default_InputFolder	C:\Users\Incell
Default_OutputFolder	C:\Users\Incell
ImageSet_Zip_Dictionary	b'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'
Path_Mappings	"{""CaseSensitive"": true, ""LocalSeparator"": ""/"", ""PathMappings"": [[""C:\\\\AGKonstandin\\\\Alex\\\\CP\\\\"", ""C:\\Users\\Incell/hits/fast/ain/CompuCard/""]], ""Url2PathnamePackageName"": ""urllib.request""}"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Pipeline_UserPipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Metadata extraction method:Extract from file/folder names
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
NamesAndTypes:[module_num:3|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
    Select the image type:Grayscale image
    Name to assign these images:CalceinAM
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
Groups:[module_num:4|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


IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CalceinAM
    Name the primary objects to be identified:Cells
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    Thresholding method:Otsu
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    Threshold correction factor:0.5
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cells
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Primarieswithoutborder
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
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
MeasureGranularity:[module_num:11|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:6
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
MeasureGranularity:[module_num:12|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
    Select images to measure:CalceinAM
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    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
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
MeasureTexture:[module_num:13|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
    Select images to measure:CalceinAM
    Select objects to measure:Cells
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
ExportToSpreadsheet:[module_num:14|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
    Select the measurements to export:No
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    Output file location:Default Output Folder|Documents\\Promotion\\experiments\\Life Cells\\2021-02-life-cells\\cp_output
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
CreateBatchFiles:[module_num:15|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
Run_Timestamp	2021-04-12T12:29:59.640185
